# WARNING: This is an automatically generated file and will be overwritten
#          by CellBlender on the next model export.

# File uses standard MCell units for bimolecular reactions (M^-1*s^-1 and um^2*N^-1*s^-1).
# When used with MCell, global option Model.config.use_bng_units must be set to False.
# WARNING: Simulation with BioNetGen won't produce correct results because BioNetGen uses different units than MCell.

begin parameters
end parameters

begin molecule types
    Ca
end molecule types

begin reaction rules
    A_decay: A -> B 1e8
end reaction rules

begin observables
    Molecules _World 
end observables

